PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'First name': '', 'Last name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 3.2
  Window size (pixels) = [2560, 1440]
  color = $[1.000,1.000,1.000]
  expName = BLAES_MST_encoding
  exportHTML = on Save
  logging level = debug
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Routines
  Routine codeStudy
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        cur_study_trial = 0
      Begin Routine:
        study_img = study_images[cur_study_trial][0]


        thisExp.addData("StudyTrial",cur_study_trial+1)
        thisExp.addData("StudyImage",study_img)
        thisExp.addData("Condition",study_images[cur_study_trial][3])


        cur_study_trial += 1
  Routine ITI
    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI
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  Routine study_trial
    ImageComponent study_outdoor_selected
      image = all_images/outdoor_selected.png
      opacity = 0
      pos [set every repeat] = $right_resp_pos
      size [set every repeat] = $circle_resp_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
      texture resolution = 512
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    ImageComponent study_outdoor
      image = all_images/outdoor_unselected.png
      pos [set every repeat] = $right_resp_pos
      size [set every repeat] = $circle_resp_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
      texture resolution = 512
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    ImageComponent study_indoor_selected
      image = all_images/indoor_selected.png
      opacity = 0
      pos [set every repeat] = $left_resp_pos
      size [set every repeat] = $circle_resp_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
      texture resolution = 512
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    ImageComponent study_indoor
      image = all_images/indoor_unselected.png
      pos [set every repeat] = $left_resp_pos
      size [set every repeat] = $circle_resp_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
      texture resolution = 512
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    ImageComponent study_image_shown
      image [set every repeat] = $study_img
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
      texture resolution = 512
      units = norm
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    KeyboardComponent study_resp
      allowedKeys = 'f','j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
      store = first key
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    CodeComponent code_14
      Code Type = Auto->JS
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      Each Frame:
        if study_resp.keys == 'f':
            study_indoor_selected.opacity = 1
        if study_resp.keys == 'j':
            study_outdoor_selected.opacity = 1
      End Routine:
        study_indoor_selected.opacity = 0
        study_outdoor_selected.opacity = 0
  Routine testCode
    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        cur_test_trial = 0
      Begin JS Experiment:
        cur_test_trial = 0;
      Begin JS Routine:
        this_trial = test_images[cur_test_trial];
        test_img = this_trial[1];
        psychoJS.experiment.addData("TestTrial", (Number.parseInt(cur_study_trial) + 1));
        if ((this_trial[2] === "Foil")) {
            psychoJS.experiment.addData("StudyImage", "None");
        } else {
            psychoJS.experiment.addData("StudyImage", this_trial[0]);
        }
        psychoJS.experiment.addData("TestImage", this_trial[1]);
        psychoJS.experiment.addData("Condition", this_trial[2]);
        cur_test_trial += 1;
      Begin Routine:
        this_trial = test_images[cur_test_trial]

        test_img = this_trial[1]



        thisExp.addData("TestTrial",int(cur_study_trial)+1)
        if this_trial[2] == 'Foil':
            thisExp.addData("StudyImage", 'None')
        else:
            thisExp.addData("StudyImage",this_trial[0])
        thisExp.addData("TestImage",this_trial[1])
        thisExp.addData("Condition",this_trial[2])

        cur_test_trial += 1
  Routine test_trial
    ImageComponent test_new_selected
      image = images/new_selected.png
      opacity = 0
      pos [set every repeat] = $right_resp_pos
      size [set every repeat] = $circle_resp_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
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    ImageComponent test_new
      image = images/new_unselected.png
      pos [set every repeat] = $right_resp_pos
      size [set every repeat] = $circle_resp_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
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    ImageComponent test_old_selected
      image = images/old_selected.png
      opacity = 0
      pos [set every repeat] = $left_resp_pos
      size [set every repeat] = $circle_resp_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
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    ImageComponent test_old
      image = images/old_unselected.png
      pos [set every repeat] = $left_resp_pos
      size [set every repeat] = $circle_resp_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
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    ImageComponent test_image_shown
      image [set every repeat] = $test_img
      size [set every repeat] = $stim_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
      units = norm
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    KeyboardComponent test_resp
      allowedKeys = 'f','j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $trial_duration
      store = first key
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    CodeComponent code_15
      Code Type = Auto->JS
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      Each Frame:
        if test_resp.keys == 'f':
            test_old_selected.opacity = 1
        if test_resp.keys == 'j':
            test_new_selected.opacity = 1
      End Routine:
        test_old_selected.opacity = 0
        test_new_selected.opacity = 0
  Routine test_instructions_routine
    TextComponent text
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        You will now be shown another series of 64 objects.

        Now you will see a series of items, and your job is to
        decide if each object is an 'Old' or 'New' object.
        If you are unsure make your best guess.

        Use the 'F' key to respond 'Old', and the 'J' key to respond 'New'.
        'F': Old
        'J': New

        Use both of your index fingers, one on each key to
        respond. Please keep your fingers on the keys at all times.
        You have 2 seconds to respond to each object.

        Once you have responded, you cannot change your answer.
        Respond as accurately and quickly as you can.

        Press the spacebar to start.
    KeyboardComponent test_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_4
      sound = audio/Test_2.wav
      startVal [time (s)] = 0.0
      volume = .5
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  Routine end
    TextComponent text_4
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        The experiment is over.
        Thank you for participating.
        Press space complete your session.
    KeyboardComponent end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine study_instructions_routine
    TextComponent study_instructions
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.025
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
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      text:
        You will be shown a series of images of objects.
        You will decide whether each object belongs indoors or outdoors.
        If you are unsure make your best guess.

        Use the 'F' key to respond 'Indoor', and the 'J' key to respond 'Outdoor'.
        'F': Indoor
        'J': Outdoor

        Use both of your index fingers, one on each key to
        respond. Please keep your fingers on the keys at all times.
        You have 3 seconds to respond to each object. The images will remain on the screen for 3 seconds even if you responded.

        Once you have responded, you cannot change your answer.
        Respond as accurately and quickly as you can.

        Press the spacebar to start.
    KeyboardComponent study_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine codeDefineImages
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        all_images = []

        with open('all_images/images_info.csv','r') as f:
            for line in f:
                line = line.strip('"')
                line_split = [col.strip().strip('"') for col in line.split(",")]
                all_images.append([f"{line_split[0].upper()}_{line_split[1]}", line_split[2]])

        imgs = []
        i = 0
        while i < len(all_images)-1:
            imgs.append([all_images[i][0], all_images[i+1][0], all_images[i][-1]])
            i+=2

        all_images = imgs
  Routine codeSetupVars
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        total_number_retrieval_sessions = 5
        num_targ_per_ret = 50
        num_foil_per_ret = 25
        num_hsim_per_ret = 25
        num_lsim_per_ret = 25


        ITI = 1
        trial_duration = 3

        image_width = .5
        image_height = .7

        stim_size = (image_width, image_height)
        stim_size = None

        circle_resp_size = (.2, .2)
        left_resp_pos = (-.4,-.4)
        right_resp_pos = (.4,-.4)
  Routine setupImageLists
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        ####### PARAMS
        ########

        ################ REAL IMAGES

        hsim_imgs = [img_pair for img_pair in all_images if img_pair[2] in ['3','4']]
        lsim_imgs = [img_pair for img_pair in all_images if img_pair[2] in ['1','2']]
        ignored_imgs = [img_pair for img_pair in all_images if img_pair[2] in ['5']]

        random.shuffle(hsim_imgs)
        random.shuffle(lsim_imgs)
        random.shuffle(ignored_imgs)

        all_sessions = []
        all_images_final = []
        for session_id in range(1, total_number_retrieval_sessions+1):
            for i in range(num_hsim_per_ret):
                all_images_final.append(hsim_imgs.pop() + ['HSim', session_id])
            for i in range(num_lsim_per_ret):
                all_images_final.append(lsim_imgs.pop() + ['LSim', session_id])

        leftovers = hsim_imgs + lsim_imgs + ignored_imgs
        random.shuffle(leftovers)

        for session_id in range(1, total_number_retrieval_sessions+1):
            for i in range(num_targ_per_ret):
                all_images_final.append(leftovers.pop() + ['Targ', session_id])
            for i in range(num_lsim_per_ret):
                all_images_final.append(leftovers.pop() + ['Foil', session_id])

        random.shuffle(all_images_final)
        for img in all_images_final:
            print(img)

        participant_id = expInfo['participant']
        with open(f'logs/{participant_id}_exp_info.csv','w+') as f:
            f.write('imgA,imgB,rating,condition,session_id\n')
            for img in all_images_final:
                f.write(','.join([str(i) for i in img]))
                f.write('\n')

        study_images = [img for img in all_images_final if img[3] in ('HSim', 'LSim')]
        for i in range(len(study_images)):
            study_images[i][0] = f"all_images/{study_images[i][0]}"

        num_study = len(study_images)
  Routine calculatePercCorr
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        num_cor = 0
        corr_responses = ['j','f','j']

        for i in [0, 1, 2]:
            if practice_results[i] == corr_responses[i]:
                num_cor += 1


        if num_cor == 3:
            practice_looper.finished = True
  Routine taskStartingShortly
    TextComponent text_16
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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      text:
        The task will start shortly.
        Please wait
Flow
  Routine codeDefineImages
  Routine codeSetupVars
  Routine setupImageLists
  Routine ITI
  Routine study_instructions_routine
  LoopInitiator study_trials loopType="TrialHandler"
    loopType = sequential
    nReps = $num_study
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    Routine codeStudy
    Routine study_trial
    Routine ITI
  LoopTerminator study_trials
  Routine end
